PsychoPy2experiment version="2022.2.2"
Settings
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Experiment
  keyboardBackend = ioHub
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Routines
  Routine trial
    ImageComponent dairy_milk
      image = Dairy Milk.png
      pos = (-0.4, -0.2)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent kitkat
      image = Kitkat.webp
      pos = (0.3, 0.2)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    MouseComponent mouse
      clickable = dairy_milk, kitkat, snickers, ferrero, munch, melody
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    ImageComponent snickers
      image = snickers.jpg
      pos = (0.5, -0.1)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent ferrero
      image = ferrero.jpg
      pos = (-0.2, 0.2)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent munch
      image = munch.jpg
      pos = (0.2, -0.35)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent melody
      image = melody.png
      pos = (-0.6, 0.2)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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Flow
  Routine trial
